<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Title>Example-Proliferation3D</Title>
        <Details></Details>
    </Description>
    <Global>
        <Constant symbol="F_1" value="1" name="steady-state FGF receptor concentration"/>
        <Constant symbol="r_F" value="1.0" name="FGF receptor endocytosis rate"/>
        <Field symbol="C" value="0.0" name="CXCL12a">
            <Diffusion rate="0"/>
        </Field>
        <System solver="adaptive45">
            <DiffEqn symbol-ref="C">
                <Expression>alpha - delta_C*C-k_CW*C*omega_W(W)-k_CF*C*omega_F(F)</Expression>
            </DiffEqn>
            <DiffEqn symbol-ref="F">
                <Expression>-delta_F * F - k_Fon*F*F_R*1/(1+F/K_F) +p_F*W_R</Expression>
            </DiffEqn>
        </System>
        <Constant symbol="alpha" value="0.2&#xa;" name="CXCL12a production"/>
        <Constant symbol="delta_C" value="0.2" name="CXCL12a external decay"/>
        <Constant symbol="k_CW" value="0.05" name="CXCL12a decay by WntR cells"/>
        <Constant symbol="k_CF" value="1.0" name="CXCL12a decay by FGFR cells"/>
        <Field symbol="F" value="0.0" name="FGF ligand">
            <Diffusion rate="0"/>
        </Field>
        <Constant symbol="K_F" value="1" name="FGF M-M constant"/>
        <Constant symbol="K_W" value="1.0" name="Wnt M-M constant "/>
        <Constant symbol="delta_F" value="0.002" name="FGF ligand decay rate"/>
        <Constant symbol="k_Fon" value="0.1" name="FGF ligand binding rate"/>
        <Function symbol="omega_W">
            <Expression>W_0/W_1/(1+x)/x</Expression>
            <Parameter symbol="x"/>
        </Function>
        <Function symbol="omega_F">
            <Expression>F_0/F_1/(1+x)/x</Expression>
            <Parameter symbol="x"/>
        </Function>
        <Constant symbol="F_0" value="0.1" name="FGF IC50"/>
        <Constant symbol="W_0" value="0.001" name="Wnt IC50"/>
        <Constant symbol="W_1" value="0.03" name="steady-state Wnt receptor concentration"/>
    </Global>
    <Space>
        <Lattice class="cubic">
            <Size symbol="size" value="100 100 100"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
                <Condition boundary="z" type="noflux"/>
                <Condition boundary="-z" type="noflux"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </Lattice>
        <MembraneLattice>
            <Resolution symbol="memsize" value="20"/>
            <SpaceSymbol symbol="m"/>
        </MembraneLattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2500"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="1456688742"/>
    </Time>
    <CellTypes>
        <CellType class="medium" name="medium"/>
        <CellType class="medium" name="matrix"/>
        <CellType class="biological" name="cell">
            <Property symbol="Vt" value="500" name="Target Volume"/>
            <Property symbol="divisions" value="0"/>
            <VolumeConstraint target="Vt" strength="1.0"/>
            <SurfaceConstraint target="1.0" mode="aspherity" strength="1.0"/>
            <CellDivision division-plane="major">
                <Condition>rand_uni(0,1) &lt; 0.0025 and cell.volume > Vt*0.9</Condition>
                <Triggers>
                    <Rule symbol-ref="divisions">
                        <Expression>divisions + 0.5</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <MembraneProperty symbol="c" value="1">
                <Diffusion rate="0.0"/>
            </MembraneProperty>
            <Variable symbol="F_R" value="0.0" name="FGF_receptors"/>
            <System solver="adaptive45">
                <DiffEqn symbol-ref="F_R">
                    <Expression>r_F(F1/(1+(W_R * (W/(1+W))^m) - F_R)</Expression>
                </DiffEqn>
            </System>
            <Property symbol="is_FGF_expressing" value="0.0"/>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0">
            <Contact type1="cell" type2="cell" value="-6"/>
            <Contact type1="cell" type2="medium" value="0"/>
            <Contact type1="cell" type2="matrix" value="-2"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="0.5"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Distance>2.5</Distance>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="cell">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Sphere radius="5" center="50,50,50"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
        <BoundaryValue boundary="x" value="matrix"/>
        <BoundaryValue boundary="-x" value="matrix"/>
        <BoundaryValue boundary="y" value="matrix"/>
        <BoundaryValue boundary="-y" value="matrix"/>
        <BoundaryValue boundary="z" value="matrix"/>
        <BoundaryValue boundary="-z" value="matrix"/>
    </CellPopulations>
    <Analysis>
        <TiffPlotter timelapse="true" format="8bit" OME-header="true" compression="false" time-step="100">
            <Channel symbol-ref="cell.id" exclude-medium="true"/>
            <Channel symbol-ref="c" exclude-medium="true" celltype="cell" outline="true"/>
        </TiffPlotter>
        <Gnuplotter time-step="100" decorate="true">
            <Plot>
                <Cells value="cell.id" slice="50"/>
            </Plot>
            <Terminal name="png"/>
        </Gnuplotter>
        <Logger time-step="100">
            <Input>
                <Symbol symbol-ref="celltype.cell.size"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot time-step="500">
                    <Style style="linespoints"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="time"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="celltype.cell.size"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
    </Analysis>
</MorpheusModel>
